CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your workspace, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "thumb") (file does contain "d0") (or (file does contain "f00"))

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Instrument>.*)_(?P<Plate>.*)_(?P<Well>[A-Za-z][0-9]{1,2})f(?P<Field>[0-9]{1,2})d(?P<ChannelNumber>[0-2])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Hoechst': 'Plate'}, {u'Hoechst': u'Well'}, {u'Hoechst': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (metadata does ChannelNumber "0")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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notes:['This module measures features that indicate image quality, including measurements of blur (poor focus), intensity and saturation.', '', 'For a given amount of focus blur, the degradation of image quality will depend in part on the size of the cellular features imaged. For example, a large nucleus 20 pixels in diameter may not be as affected by a small amount of blurring as a thin actin filament that is only 5 pixels wide. 0.5×, 1× and 2× the size of a given structure of interest are good starting points. Since the size of the features can vary over a wide range in HCS, it is often helpful to specify several spatial scales in order to capture differing amount of blur.CellProfiler will measure the blurriness metrics for all spatial scales, for all selected input images. Later in the analysis, blur measurements resulting from each scale can be examined and assessed for utility. Threshold info should correspond to analysis pipeline.']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:6
    Threshold count:1
    Select the images to measure:OrigBlue
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:40
    Spatial scale for blur measurements:60
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ExportToSpreadsheet:[module_num:6|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\Lab\\CellProfiler\\TEST\\output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:QC_Plate
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:7|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notes:['Export the measurements to the database. The majority of these settings should not need to be changed.', '', 'The one exception is the "Table prefix" setting, which needs changing for each batch of plates to be run. Our standard nonmenclature for analysis runs is "<Descriptor_of_experiment>_<Date_in_yyyy_mm_dd_format>_QC_" (note the final underscore). Please use the descriptor and data as for the analysis run.', '', 'If you forget to change the table prefix from one that already exists, CP will warn you re: overwriting prior to the run.']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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:sonja_QC_Plate
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    Output file location:Default Output Folder|None
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:sonja_qc_test1.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:None
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
    Enter an image url prepend if you plan to access your files via http:http://imageweb/images/CPALinks/
    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:Hoechst
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:3
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:sonja_qc_test1
    Which objects should be used for locations?:None
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Image
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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